PsychoPy2experiment version="2023.2.1"
Settings
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = adaptiveStroop
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine experimentalTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # trial and adaptive duration
        if sequenceDataset.trial[experimentalBlock.thisN]==1:
            sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_3qrtRT  # for first 1 trial, use 3rd qrt RT from practice block + 500 ms

        else:
            sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.trialDuration[experimentalBlock.thisN-1] + sequenceDataset.step[experimentalBlock.thisN-1]   # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.word',           sequenceDataset.word[experimentalBlock.thisN])
        thisExp.addData('myExp.color',           sequenceDataset.color[experimentalBlock.thisN])
        thisExp.addData('myExp.congruent',      sequenceDataset.congruent[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])
      End Routine:
        # observed response
        if stroopResp.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = stroopResp.keys
        thisExp.addData('myExp.observedResponse',   sequenceDataset.observedResponse[experimentalBlock.thisN])

        # trialDuration
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])

        # Accuracy
        if sequenceDataset.observedResponse[experimentalBlock.thisN]==np.nan:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(0)
        else:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == sequenceDataset.expectedResponse[experimentalBlock.thisN])
        thisExp.addData('myExp.Accuracy',         sequenceDataset.Accuracy[experimentalBlock.thisN])

        # RT all trials
        if stroopResp.keys:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = stroopResp.rt
            thisExp.addData('myExp.RT_allTrials',     sequenceDataset.RT_allTrials[experimentalBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[experimentalBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN] = stroopResp.rt
            thisExp.addData('myExp.RT_correctTrials',     sequenceDataset.RT_correctTrials[experimentalBlock.thisN])

        # adaptation
        if sequenceDataset.congruent[experimentalBlock.thisN]==0:   # for "incongruent" trials
            if sequenceDataset.Accuracy[experimentalBlock.thisN]==1:
                sequenceDataset.step[experimentalBlock.thisN]    = -0.05    # if correct response, decrease duration
            else:
                sequenceDataset.step[experimentalBlock.thisN]    = +0.05    # otherwise (incorrect or no response), increase duration
        else:  # for "congruent" trials
            sequenceDataset.step[experimentalBlock.thisN]    = 0.0  # no step change
        thisExp.addData('myExp.step',         sequenceDataset.step[experimentalBlock.thisN])
    TextComponent stroopStim
      color [set every repeat] = $sequenceDataset.color[experimentalBlock.thisN]
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      text [set every repeat] = $sequenceDataset.word[experimentalBlock.thisN]
      units = deg
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    KeyboardComponent stroopResp
      allowedKeys = 's','c','m','l','None'
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      units = height
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  Routine starttask
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    TextComponent startText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    CodeComponent fbcCode
      Code Type = Py
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      Begin Routine:
        # decide duration of blank element
        if stroopResp.keys:  # if a response was given, wait for the remainder before next trial
            blankDuration = sequenceDataset.trialDuration[experimentalBlock.thisN] - stroopResp.rt
        else:                 # if no response was given, it means that the time was already over for that trial
            blankDuration = 0


        # sound of feedback
        if stroopResp.corr:
            sound_volume = 0
        else:
            sound_volume = 1
    StaticComponent blankPeriod
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
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    ProgressComponent progressBar_2
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
      units = height
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    SoundComponent fbSound
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine Instruction
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    ImageComponent instImage
      image = inst_stroop_1.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Instruction2
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    ImageComponent instImage2
      image = inst_stroop_2.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine End
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    ImageComponent endImage
      image = end slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = 216 # number of trials (must be even)
        trialCongruent_proportion = 1/2 # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion # num of congruent trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color=="yellow"] = "s"
        expectedResponse[color=="green"]  = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"


        # %% create dataset
        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'word': word,
                                       'color': color,
                                       'congruent': congruent,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
        sequenceDataset
    CodeComponent fetchPracticeData
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import numpy as np

        # folder containing the data (user dependent)
        data_files = 'D:/github/study2/stroop-task/data/' # New's folder

        # find file name based on this participant information
        csv_name = expInfo['participant'] + '_practiceStroop.csv'

        # open this participant's practice data
        practiceData = pd.read_csv(f"{data_files}{csv_name}")

        # find rows corresponding to the last practice block
        rowIdx = practiceData["practiceRepetition.thisN"]==max(practiceData["practiceRepetition.thisN"])

        # find list of reaction times
        rt_correct = practiceData["myPract.RT_correctTrials"][rowIdx]

        # define initial duration
        Practice_correctTrials_MdnRT  = np.nanmedian(rt_correct)
        Practice_correctTrials_3qrtRT = np.nanpercentile(rt_correct, 75)
Flow
  Routine Instruction
  Routine Instruction2
  Routine starttask
  Routine sequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
    Routine blank
  LoopTerminator experimentalBlock
  Routine End
